# User defined command_file for plastimatch registration

# User defined command_file for plastimatch registration

#  STEP 1: Align Center
[STAGE]
xform=align_center

[STAGE]
xform=translation
impl=plastimatch
gridsearch_min_overlap=0.8 0.8 0.8
res=3 3 1
num_substages=2
metric=mse
background_max = -200
mi_histogram_bins = 10
max_its=1000

# 12-dof affine
[STAGE]
xform=affine
impl = itk
#threading = cuda
optim=rsg
min_step = 0.1
max_step = 50
max_its=1000
res=7 7 3
metric=mse
translation_scale_factor = 100

# STEP 3: Registration using masks for lesions and bones
[STAGE]
impl = plastimatch
metric=mse
xform=bspline
#xform=vf
#optim=demons
res=9 9 5
#threading = cuda
max_its=30
grid_spac=25 25 20
regularization = analytic
regularization_lambda=0.1

# STEP 4: Refinement
[STAGE]
impl = plastimatch
metric=mse
#threading = cuda
xform=bspline
##optim=demons
res=5 5 3
max_its=30
grid_spac=10 10 5
regularization = analytic
regularization_lambda=0.01
#mi_histogram_bins = 25

# STEP 4: Refinement
[STAGE]
impl = plastimatch
metric=mse
#threading = cuda
xform=bspline
##optim=demons
res=3 3 2
max_its=30
grid_spac=8 8 4
regularization = analytic
regularization_lambda=0.05
#mi_histogram_bins = 25

# STEP 7: Refinement
[STAGE]
impl = plastimatch
metric=mse
#threading = cuda
xform=bspline
##optim=demons
res=2 2 1
max_its=30
grid_spac=7 7 3
regularization = analytic
regularization_lambda=0.1
#mi_histogram_bins = 25

